PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [3440, 1440]
  color = black
  expName = 270300_Mental_Rotation
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Routines
  Routine instructions_2D
    ImageComponent instr_2D
      image = Stimuli_2D\instructions\instructions.png
      size = (584, 441)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent instr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_2D
